//@ File    (label = "Input image directory", style = "directory") imageInputFolder
//@ File    (label = "Input ROIset directory", style = "directory") roiInputFolder
//@ File    (label = "Output directory", style = "directory") outputFolder
//@ String  (label = "Image file extension", value=".nd2") fileSuffix

// GPcalc_Rois.jim
// Based on GPcalc macros by quokka and Ofra Golani
// TODO: insert names and citations
// TODO: Strip image extension when naming the histograms
// TODO: fix histo counts smoothed norm columns
// Updated by Theresa Swayne, 2025
// -- handles ROIs

//  -------- Suggested text for acknowledgement -----------
//   "These studies used the Confocal and Specialized Microscopy Shared Resource 
//   of the Herbert Irving Comprehensive Cancer Center at Columbia University, 
//   funded in part through the NIH/NCI Cancer Center Support Grant P30CA013696."

// ---- Setup ----

//while (nImages>0) { // clean up open images
//	selectImage(nImages);
//	close();
//}
closeAllImages(); // this calls a helper function 

print("\\Clear"); // clear Log window
roiManager("reset");

setBatchMode(true); // faster performance
run("Bio-Formats Macro Extensions"); // support native microscope files

requires("1.52p");

nBins = 100; // number of histogram bins to use. 
// NB: the histogram labels are the minimum value for each bin.

// ---- Run ----

// initialise the timer for the log
startTime = getTime();
print("Starting at", startTime);
// Initialise defaults and selection lists
YNquestion = newArray("Yes","No");
GFapplication = newArray("Image data (pre GP calc)","Histogram data (post GP calc)");
ThreshList = newArray("Normal","Otsu");
DoThresholdsFor = newArray("First image only", "All images");
LUTlist = getLUTlist();

// Choose image channels and threshold value
Dialog.create("GP analysis parameters");
Dialog.addString("Short Results Descriptor:", "");

Dialog.addMessage("------------------------------------------- Image channels -------------------------------------------");
Dialog.addNumber("Channel A (Ordered):", 1);
Dialog.addString("Channel A Label:", "ordered");
Dialog.addMessage("\n");
Dialog.addNumber("Channel B (Disordered):", 2);
Dialog.addString("Channel B Label:", "disordered");
Dialog.addMessage("\n");
Dialog.addNumber("Channel C (Immunofluorescence, (0 = None):", 3);
Dialog.addString("Channel C Label:", "proteinX");

Dialog.addMessage("------------------------------------------- GP Calculation -------------------------------------------");
Dialog.addChoice("Use native bit depth?",YNquestion, "Yes");
Dialog.addNumber("G factor (1 if unknown, -1 to estimate):", 1);
Dialog.addChoice("Apply G factor to image data or histograms?",GFapplication, "Histogram data (post GP calc)");
Dialog.addChoice("Lookup Table for GP Images:", LUTlist, "Blu2Yel-BlackMinimum");

Dialog.addMessage("------------------------------------------- Mask Thresholds ------------------------------------------");
Dialog.addChoice("Threshold method: ", ThreshList, "Normal");
Dialog.addChoice("Normal method only: Tweak thresholds manually?",YNquestion, "Yes");

Dialog.addMessage("--------------------------------------------- False-colour Images ---------------------------------------------");
Dialog.addChoice("Do you want to generate False-colour images?",YNquestion, "Yes");

Dialog.addMessage("\n");
Dialog.show();

// make sure we aren't doing 'weighted' conversions, in case the input data is formatted as an RGB stack.
run("Conversions...", "scale");

// Set variables from dialog input
FolderNote = Dialog.getString();

chOrdered = Dialog.getNumber();
LabelchOrdered = Dialog.getString();

chDisordered = Dialog.getNumber();
LabelchDisordered = Dialog.getString();

ch_IF = Dialog.getNumber();
LabelchIF = Dialog.getString();

UseNativeBitDepth = Dialog.getChoice();
GFactor = Dialog.getNumber();
GFactorAppliedTo = Dialog.getChoice();
GPLUTname = Dialog.getChoice();

ThresholdType = Dialog.getChoice();
TweakThreshold = Dialog.getChoice();

MakeHSBimages = Dialog.getChoice();

// these have to survive inside the HSB function
var GPminUserSet = -1;
var GPmaxUserSet = 1;
var GPmaskThreshold = -1; // dummy value
var IFmaskThreshold = -1; // dummy value

// Additional user choices for thresholding

if (ThresholdType == "Normal"){
	if (TweakThreshold == "No"){
	
		Dialog.create("Enter the threshold values to use")
		Dialog.addMessage("------------------------------------------- Preset Mask Thresholds ------------------------------------------");
		Dialog.addNumber("GP-mask threshold from:", 15);
		Dialog.addNumber("IF-mask threshold from: ", 10);
		Dialog.addMessage("\n");
		Dialog.show();
		
		GPmaskThreshold = Dialog.getNumber();
		IFmaskThreshold = Dialog.getNumber();
		ThreshForAll = false; // because we use the same threshold for all images, not adjusting for each
		// TODO: clarify language for this!
		
	} else {

		Dialog.create("Adjust threshold for all images?")
		Dialog.addMessage("-------------------------------------- Adjust threshold for all images? -------------------------------------");
		Dialog.addMessage("Thresholds can be set for each image individually");
		Dialog.addMessage("    OR");
		Dialog.addMessage("The first image's threshold can be applied to all subsequent images.\n");
		Dialog.addMessage("Each image has a threshold set for the sum GP images and a second optional");
		Dialog.addMessage("threshold for the immunofluoresence channel (if present).");
		Dialog.addChoice("Adjust threshold for...",DoThresholdsFor, "First image only");
		Dialog.addMessage("\n");
		Dialog.show();
		
		ThreshForAllChoice = Dialog.getChoice();
		if (ThreshForAllChoice == DoThresholdsFor[1]) {
			ThreshForAll = true;
		} else {
			ThreshForAll = false;
		}
	}
}

// Additional user choices for HSB images

Option_A = LabelchOrdered;
Option_B = LabelchDisordered;
Option_C = LabelchIF;
Option_D = "Sum of " + LabelchOrdered + " + " + LabelchDisordered;
Option_E = "Sum of " + LabelchOrdered + " + " + LabelchDisordered + " and also " + LabelchIF + ", separately";

if (MakeHSBimages == "Yes") {

	HSBrightChannelOptions_3Ch = newArray(Option_A, Option_B, Option_C, Option_D, Option_E);
	HSBrightChannelOptions_2Ch = newArray(Option_A, Option_B, Option_D);

	// Choose brightness channels and LUT
	Dialog.create("HSB Image generation");
	Dialog.addMessage("--------------------------------------------- False-colour Images ---------------------------------------------");
	Dialog.addChoice("Hue - use Lookup Table for GP data: ",LUTlist, "Candy-Bright-BlackMinimum");
	if (ch_IF == 0) {
		Dialog.addChoice("Brightness - Use intensity from: ", HSBrightChannelOptions_2Ch, Option_D);
	} else {
		Dialog.addChoice("Brightness - Use intensity from: ", HSBrightChannelOptions_3Ch, Option_E);
	}
	Dialog.addChoice("Apply fixed restricted intensity range to all images?",YNquestion, "No");
	Dialog.addChoice("Apply 1px median filter prior to save?",YNquestion, "No");

	Dialog.addMessage("\n");
	Dialog.show();

	HSBLUTName = Dialog.getChoice();
	HSBrightChannel = Dialog.getChoice();
	ApplySameBrightness =Dialog.getChoice();
	ApplyMedianFilter =Dialog.getChoice();
}


// Set up results folders with date-time stamp

getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
if (hour<10) {
	hours = "0"+hour;
} else {
	hours=hour;
}

if (minute<10) {
	minutes = "0"+minute;
} else {
	minutes=minute;
}

if (month<10) {
	months = "0"+(month+1);
} else {
	months=month+1;
}

if (dayOfMonth<10) {
	dayOfMonths = "0"+dayOfMonth;
} else {
	dayOfMonths=dayOfMonth;
}
MonthNames = newArray("Jan","Feb","Mar","Apr","May","Jun","Jul","Aug","Sep","Oct","Nov","Dec");
DayNames = newArray("Sun", "Mon","Tue","Wed","Thu","Fri","Sat");

if (FolderNote == "") { //  we're moving results to the output folder 
 results_Dir = outputFolder + File.separator + "Results_" + d2s(year,0) + d2s(months,0) + d2s(dayOfMonths,0) + "(" + hours + "h" + minutes + ")" + File.separator;
} else {
 results_Dir = outputFolder  + File.separator + FolderNote + "-" + d2s(year,0) + d2s(months,0) + d2s(dayOfMonths,0) + "(" + hours + "h" + minutes + ")" + File.separator;
}
File.makeDirectory(results_Dir);

InputImages_Dir = results_Dir + "Input images" + File.separator;
File.makeDirectory(InputImages_Dir);

ordered_images_Dir = InputImages_Dir + LabelchOrdered + File.separator;
File.makeDirectory(ordered_images_Dir);

disordered_images_Dir = InputImages_Dir + LabelchDisordered + File.separator;
File.makeDirectory(disordered_images_Dir);

sumGP_images_Dir = InputImages_Dir + "Sum (" + LabelchOrdered + "+" + LabelchDisordered +") Images" + File.separator;
File.makeDirectory(sumGP_images_Dir);

GP_images_Dir = results_Dir + "Masked (by " + Option_D +") GP images" + File.separator;
File.makeDirectory(GP_images_Dir);

histogramGP_Dir = GP_images_Dir + "Histograms" + File.separator;
File.makeDirectory(histogramGP_Dir);

rawGP_images_Dir = results_Dir + "GP images" + File.separator;
File.makeDirectory(rawGP_images_Dir);


if (MakeHSBimages == "Yes") {

	HSB_Dir = results_Dir + "HSB images" + File.separator;
	File.makeDirectory(HSB_Dir);
	
//	HSB_TIF_Dir = HSB_Dir + "TIF" + File.separator;
//	File.makeDirectory(HSB_TIF_Dir);

 if (ApplySameBrightness == "No") {
	HSB_LUTs_Dir = HSB_Dir + "colorbars" + File.separator;
	File.makeDirectory(HSB_LUTs_Dir);
 }
}

if (ch_IF != 0) {
 IF_images_Dir = InputImages_Dir + LabelchIF + File.separator;
 File.makeDirectory(IF_images_Dir);

 GP_IF_images_Dir = results_Dir + "Masked (by " + LabelchIF + ") GP images" + File.separator;
 File.makeDirectory(GP_IF_images_Dir);

 histogramIF_Dir = GP_IF_images_Dir + "Histograms" + File.separator;
 File.makeDirectory(histogramIF_Dir);
}

// Set up GP and GPcorrected Arrays for histogram calculations
nBins=100;
GPuncorrected = newArray(nBins);
for (j = 0; j < nBins; j++) {
	GPuncorrected[j] = ((j - (nBins/2)) / (nBins/2));
}

GPcorrected = newArray(nBins);
if (GFactorAppliedTo == "Image data (pre GP calc)") {
	GFHistograms = 1; // GFactor will be applied to the image data, the histograms are not modified.
} else {
	//"Histogram data (post GP calc)"
	GFHistograms = GFactor; // the histograms are corrected, the image data will not be modified.
}

for (k = 0; k < nBins; k++) {
	GPcorrected[k] = -(1 + GPuncorrected[k] + (GFHistograms * GPuncorrected[k]) - GFHistograms) / (-1 - GPuncorrected[k] + (GFHistograms * GPuncorrected[k]) - GFHistograms);
}

// ---- Begin batch processing ----

// log initial parameters
print("GP calculation using ImageJ version " + getVersion());
print("Run time "+DayNames[dayOfWeek]+", "+dayOfMonth+" "+MonthNames[month]+" "+year+" - "+hours+":"+minutes);
print("----------------------------------");
print("Processing files with extension: " + fileSuffix);
print("\n");
print("------ Input Images ------");
print("Ordered channel: " + chOrdered);
print("Disordered channel: " + chDisordered);
if (ch_IF != 0) {
	print("Immunofluoresence channel: " + ch_IF); 
} else { 
	print("Immunofluoresence channel: Not present"); 
};
print("\n");

print("------ Output GP Images ------");
print("GP images were calculated using input image bit depth: " + UseNativeBitDepth);
print("GP images' lookup table: " + GPLUTname);
print("G factor: " + GFactor + " was applied to " + GFactorAppliedTo + ".");
print("\n");
print("------ Output GP-masked GP Images ------");
print("GP mask threshold method: " + ThresholdType);
if (ThresholdType=="Normal") {
	if (ThreshForAll) { 
		print("GP threshold set individually for each image");
	}
	else {
		print("GP-mask threshold value (lower limit, 32 bit): " + GPmaskThreshold);
	}
}
print("\n");
if (ch_IF != 0) { 
	print("------ Output IF-masked GP Images ------");
	print("IF-mask threshold method: " + ThresholdType);
	
	if (ThresholdType=="Normal") {
		if (ThreshForAll) {
			print("IF threshold set individually for each image");
		}
		else {
			print("IF-mask threshold value (lower limit): "+ IFmaskThreshold);
		}
	}
	print("\n");
}
if (MakeHSBimages=="Yes") {
	print("------ Output HSB GP Images ------");
	print("Intensity from: " + HSBrightChannel);
	if (ApplySameBrightness=="Yes") {
		print("Forced consistent GP intensity range: " + GPminUserSet + " (min) to " + GPmaxUserSet + " (max)");	
	}
	print("HSB images' lookup table: " + HSBLUTName);
print("\n");
}
print("Main results folder is: ");
print(" " + results_Dir);
print("\n");

// ---- Process the folder ----

processFolder(imageInputFolder, roiInputFolder, outputFolder, fileSuffix);

// ---- Clean up -----

// Clean up images and get out of batch mode
while (nImages > 0) { // clean up open images
	selectImage(nImages);
	close(); 
}
roiManager("reset");
//setBatchMode(false);

// Finish and save the log
endTime = getTime();
elapsedTime = endTime - startTime;
print("Finished in", elapsedTime/1000, "sec");
selectWindow("Log");
saveAs("Text", results_Dir + "ProcessingLog_ "+year+months+dayOfMonths+"("+hours+"h"+minutes+")");
setBatchMode("exit and display");


// ---- Functions ----

function processFolder(imageInput, roiInput, output, suffix) {

	// this function searches for files matching the criteria and sends them to the processFile function
	filenum = -1;
	print("Processing folder", imageInput);
	// scan folder tree to find files with correct suffix
	list = getFileList(imageInput);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(imageInput + File.separator + list[i])) {
			processFolder(imageInput + File.separator + list[i], roiInput, output, suffix); // handles nested folders
		}
		if(endsWith(list[i], suffix)) {
			filenum = filenum + 1;
			processFile(imageInput, roiInput, output, list[i], filenum); // passes the filename and parameters to the processFile function
		}
	}
} // end of processFolder function



function processFile(imageFolder, roiFolder, outputFolder, imgName, fileNumber) {
	
	// this function processes a single image
	// TODO: Add to log: threshold for gp, threshold for if, possibly gp peak value
	
	imagePath = imageFolder + File.separator + imgName;
	//print("Processing file",fileNumber," at path" ,imagePath);

	// determine the name of the file without extension
	dotIndex = lastIndexOf(imgName, ".");
	basename = substring(imgName, 0, dotIndex); 
	extension = substring(imgName, dotIndex);
	
	print("Processing image",fileNumber,"at path" ,imagePath,", with basename",basename);
	
	dir = imageFolder; // legacy variable

	//setBatchMode(true);

	// open the image, splitting channels
	run("Bio-Formats", "open=&imagePath color_mode=Default view=[Hyperstack] stack_order=Default virtual split_channels");
	//run("Bio-Formats Importer", "open=[" + dir + imgName + "] color_mode=Default view=[Standard ImageJ] stack_order=Default virtual split_channels");
	
	// open ROIs for this image
	
	roiFile = basename + "_Rois.zip";
	roiPath = roiFolder + File.separator +roiFile;
	
	roiManager("reset");
	print("Opening ROI", roiPath); // roi path in log
	roiManager("Open", roiPath);
		
	// set window titles
	ordWindowTitle = imgName + " - C=" + chOrdered - 1;
	disWindowTitle = imgName + " - C=" + chDisordered - 1;

	if (ch_IF != 0) {
		imfWindowTitle = imgName + " - C=" + ch_IF - 1;
	}

	//select ordered
	selectWindow(ordWindowTitle);
	run("Grays");
	
	if (UseNativeBitDepth == "No") {
		// This is to match the original processing of the macro.
		run("8-bit");
		run("32-bit");
		saveAs("Tiff", ordered_images_Dir + imgName + "_ordered_32bit.tif");
	} else {
		saveAs("Tiff", ordered_images_Dir + imgName + "_ordered.tif");
	}

	rename(ordWindowTitle);

	//select disordered, apply GFactor correction
	selectWindow(disWindowTitle);
	run("Grays");
	if (UseNativeBitDepth == "No") {
	
		// This is to match the original processing of the macro.
		run("8-bit");
		run("32-bit");

		if (GFactorAppliedTo == "Image data (pre GP calc)") {
			run("Multiply...","value=" + GFactor);
			saveAs("Tiff", disordered_images_Dir + imgName + "_disordered_GFactorCorrected_32bit.tif");
		} else {
			saveAs("Tiff", disordered_images_Dir + imgName + "_disordered_32bit.tif");
		}

	} else {

		if (GFactorAppliedTo == "Image data (pre GP calc)") {
			run("Multiply...","value=" + GFactor);
			saveAs("Tiff", disordered_images_Dir + imgName + "_disordered_GFactorCorrected.tif");
		} else {
			saveAs("Tiff", disordered_images_Dir + imgName + "_disordered.tif");
		}

	}

	rename(disWindowTitle); // restore the window name after saving this image

	if (ch_IF != 0) {
		
		selectWindow(imfWindowTitle);
		run("Grays");
		
		if (UseNativeBitDepth == "No") {
		
			run("8-bit");
			run("32-bit");
			saveAs("Tiff", IF_images_Dir + imgName + "_IF_32bit.tif");
			
		} else {
			
			saveAs("Tiff", IF_images_Dir + imgName + "_IF.tif");
			
		}

		rename(imfWindowTitle);
		
	}

	//GP Analysis

	// difference channels (ordered - disordered)
	imageCalculator("Subtract create 32-bit", ordWindowTitle, disWindowTitle);
	diffName = imgName + " - ordered minus disordered";
	rename(diffName);

	// sum channels (ordered + disordered)
	imageCalculator("Add create 32-bit", ordWindowTitle, disWindowTitle);
	sumName = imgName + " - ordered plus disordered";
	rename(sumName);

	// GP = (difference / sum)
	imageCalculator("Divide create 32-bit", diffName, sumName);
	rawGPname = imgName + " - raw GP";
	saveAs("Tiff", rawGP_images_Dir + imgName + "_rawGP_32bit.tif");
	rename(rawGPname);

	// set same scale
	setMinAndMax(-1.0, 1.0);
	call("ij.ImagePlus.setDefault16bitRange", 0);

	// create masked GP by thresholding
	selectWindow(sumName);
	run("Duplicate..."," ");
	saveAs("Tiff", sumGP_images_Dir + imgName + "_Ord+Dis_32bit.tif");
	SumMaskName = "SumMask";
	rename(SumMaskName);
	
	selectWindow(SumMaskName);
	if (ThresholdType == "Normal") {
		
		if (TweakThreshold == "Yes"){
			
			if (fileNumber == 0 || ThreshForAll) { // first image in the list, or all to be manually thresholded

		 		setBatchMode("show"); // temporarily leave batch mode to display the GUI
				setOption("BlackBackground", true);
				setAutoThreshold("Default dark");
				run("Threshold..."); // ask user to set the threshold
				// waitForUser("Summed Intensity Image for GP Mask\n1. Adjust only the low-end threshold (the first slider).\n2. Click Apply to apply once you have found a good threshold.\n3. Select the 'Set to NaN' option when asked.\n4. Click OK here to continue...");
				// prompt user to adjust threshold but do not ask them to apply it
				waitForUser("Summed Intensity Image for GP Mask\n1. Adjust only the low-end threshold (the first slider).\n2. Click OK here to continue...");
				//if (isOpen('Threshold')) {selectWindow('Threshold'); run('Close');}
				//run("Threshold..."); // run threshold again to retrieve the values
				getThreshold(GPmaskThreshold,currGPMax); // get the threshold value as tweaked by user
				print("Threshold for GP =", GPmaskThreshold);
				// Apply the threshold, creating a NaN mask
				setOption("BlackBackground", true);
				run("NaN Background");
				createNaNMask();
				if (isOpen('Threshold')) {selectWindow('Threshold'); run('Close');}
		 		setBatchMode("hide");
		 		
			} else { // subsequent images --  should use the previously set value
				getMinAndMax(currGPMin,currGPMax);
				setThreshold(GPmaskThreshold, currGPMax);
				print("Threshold for GP =", GPmaskThreshold);
				// Apply the threshold, creating a NaN mask
				setOption("BlackBackground", true);
				run("NaN Background");
				createNaNMask();
			}
			
		} else { // no tweaking

			getMinAndMax(currGPMin,currGPMax);
			setThreshold(GPmaskThreshold, currGPMax);
			print("Threshold for GP =", GPmaskThreshold);
			// Apply the threshold, creating a NaN mask
			setOption("BlackBackground", true);
			run("NaN Background");
			createNaNMask();
		}

	} else if (ThresholdType == "Otsu") {

		setAutoThreshold("Otsu dark");
		getThreshold(OtsuGPMaskThreshold,currIFMax);
		// Apply the threshold, creating a NaN mask
		setOption("BlackBackground", true);
		run("NaN Background");
		createNaNMask();
		print("Used Otsu threshold of",OtsuGPMaskThreshold," for GP sum image");
	}

	imageCalculator("Multiply create", SumMaskName, rawGPname);
	run(GPLUTname);
	maskedGPname = imgName + " - GP";
	saveAs("tiff", GP_images_Dir + imgName + " (" + Option_D + ")-masked GP");
	rename(maskedGPname);
	selectWindow(SumMaskName);
	close();

	// generate GP-masked histograms for whole image
	HistoFileName=histogramGP_Dir + imgName + "GP Histogram" + "(masked by " + Option_D + ").csv";
	HistogramGeneration(maskedGPname, HistoFileName); // histos masked on the GP channel

	// generate GP-masked histograms for each ROI
	numRois = roiManager("count");
	roiManager("Deselect");
	run("Select None");
	
	for(roiIndex=0; roiIndex < numRois; roiIndex++) // loop through ROIs
		{ 
		roiNum = roiIndex + 1; // so that image names start with 1 like the ROI labels
		roiManager("Select", roiIndex);  // ROI indices start with 0
		roiName = Roi.getName();
		print("Generating masked histogram for ROI",roiNum, "named",roiName);
		RoiHistoFileName=histogramGP_Dir + imgName + "_" + roiName + "_GP Histogram (masked by " + Option_D + ").csv";
		HistogramGeneration(maskedGPname, RoiHistoFileName); // histos masked on the GP channel
		roiManager("deselect");
		run("Select None");
		}
	
	roiManager("deselect");
	run("Select None");
	print("Measured",numRois,"masked ROIs");
	
	// if we are given some other intensity channel (the immunofluoresence channel) then...
	if (ch_IF != 0) {
	
		// make a binary mask from the IF image
		selectWindow(imfWindowTitle);
		run("Duplicate..."," ");
		IFmaskName = "IFMask";
		rename(IFmaskName);

		selectWindow(IFmaskName);
		if (ThresholdType == "Normal") {
			
			if (TweakThreshold == "Yes"){
				
				if (fileNumber == 0 || ThreshForAll) { // first image in the list

					setBatchMode("show");
					setOption("BlackBackground", true);
					setAutoThreshold("Default dark");
	 	 			run("Threshold...");
	 	 			waitForUser("Immunofluoresence channel image for IF-mask\n1. Adjust only the low-end threshold (the first slider).\n2. Click OK here to continue...");
	 	 			//if (isOpen('Threshold')) {selectWindow('Threshold'); run('Close');}
					//run("Threshold...");
					getThreshold(IFmaskThreshold,currIFMax);
					print("Threshold for IF =", IFmaskThreshold);
					// Apply the threshold, creating a NaN mask
					setOption("BlackBackground", true);
					run("Convert to Mask");
					createNaNMask();
					if (isOpen('Threshold')) {selectWindow('Threshold'); run('Close');}
			 		setBatchMode("hide");
			 		
				} else {

				getMinAndMax(currIFMin,currIFMax);
				setThreshold(IFmaskThreshold, currIFMax);
				print("Threshold for IF =", IFmaskThreshold);
				// Apply the threshold, creating a NaN mask
				setOption("BlackBackground", true);
				run("Convert to Mask");
				createNaNMask();
				}
				
			} else { // no tweak

				getMinAndMax(currIFMin,currIFMax);
				setThreshold(IFmaskThreshold, currIFMax);
				print("Threshold for IF =", IFmaskThreshold);
				// Apply the threshold, creating a NaN mask
				setOption("BlackBackground", true);
				run("Convert to Mask");
				createNaNMask();
			}

		} else if (ThresholdType == "Otsu") {
			
			setAutoThreshold("Otsu dark");
			getThreshold(OtsuIFMaskThreshold,currIFMax);
			print("Used Otsu threshold of",OtsuIFMaskThreshold," for IF image");
			// Apply the threshold, creating a NaN mask
			setOption("BlackBackground", true);
			run("Convert to Mask");
			createNaNMask();
		}

		// createNaNMask();
		imageCalculator("Multiply create", IFmaskName, rawGPname);
		run(GPLUTname);
		GPIFName = imgName + " - GPIF";
		saveAs("tiff", GP_IF_images_Dir + imgName + " (" + Option_C + ")-masked GP");
		rename(GPIFName);
		selectWindow(IFmaskName);
		close();
					
		HistoFileName=histogramIF_Dir + imgName + "_GP Histogram (masked by " + Option_C + ").csv";
		HistogramGeneration(GPIFName, HistoFileName); // for the whole image
		
		// generate IF-masked histograms for each ROI
		numRois = roiManager("count");
		roiManager("Deselect");
		run("Select None");
	
		for(roiIndex=0; roiIndex < numRois; roiIndex++) // loop through ROIs
			{ 
			roiNum = roiIndex + 1; // so that image names start with 1 like the ROI labels
			roiManager("Select", roiIndex);  // ROI indices start with 0
			roiName = Roi.getName();
			print("Generating IF-masked histogram for ROI",roiNum, "named",roiName);
			RoiHistoFileName=histogramIF_Dir + imgName + "_" + roiName + "_GP Histogram (masked by " + Option_C + ").csv";
			HistogramGeneration(GPIFName, RoiHistoFileName); // histos masked on the IF channel
			roiManager("deselect");
			run("Select None");
			}
		
		roiManager("deselect");
		run("Select None");
		print("Measured",numRois,"ROIs masked by the IF channel.");
	
		}

	if (MakeHSBimages=="Yes") {

		// Select and copy the channel to be used for 'brightness' (the raw ord/dis/IF image)
		if (HSBrightChannel==Option_A) {
			HSBgeneration(ordWindowTitle, Option_A);
		} else if (HSBrightChannel==Option_B) {
			HSBgeneration(disWindowTitle, Option_B;
		} else if (HSBrightChannel==Option_C) {
			HSBgeneration(imfWindowTitle, Option_C);
		} else if (HSBrightChannel==Option_D) {
			HSBgeneration(sumName, Option_D);
		} else if (HSBrightChannel==Option_E) {
			HSBgeneration(sumName, Option_D);
			HSBgeneration(imfWindowTitle, Option_C);
		}


	}

	closeAllImages();
//	FractionDone = fileNumber / numberOfImages;
//	showProgress(FractionDone);


} // end of processFile function



///////////////// Supporting Functions ////////////////////

function closeAllImages() {

	while (nImages>0) {
		selectImage(nImages);
		close(); }

}


function newFolder() {

	File.makeDirectory(Folder);
	listZ = getFileList(Folder);
	for (f = 0; f < listZ.length; f++) {
		File.delete(Folder + listZ[f]);
	}

}

function createNaNMask() {
	
	run("Options...", "black");
	run("32-bit");
	run("Macro...", "code=[if (v == 0) v = NaN;]"); // set the background pixels to NaNs using Process > Math > Expression evaluator
	run("Macro...", "code=[if (v > -1) v = 1;]");   // set the foreground pixels to 1.0
	setMinAndMax(0.0,1.0);
	
}

function HistogramGeneration (WindowName, HistoFileName) {

	IntensityVals=newArray(nBins);
	PixelCounts=newArray(nBins);
	PixelCountsNormalized=newArray(nBins);
	SmoothedHisto=newArray(nBins);
	SmoothedNormalized=newArray(nBins);

	selectWindow(WindowName);
	getHistogram(values, counts, nBins, -1.0, 1.0);

	// Here we apply a kernel smoothing to histogram. It's better to present the actual values rather 
	// than the smoothed ones but smoothing can help visualise changes and shifts in the distribution.
	for (u = 0; u < nBins; u++) {
		PixelCounts[u] = counts[u];
		if (u < 1) {
			SmoothedHisto[u] = (counts[u] + counts[u + 1]) / 2; // two-bin average for the first bin
		} else if (u == nBins - 1) {
			SmoothedHisto[u] = (counts[u] + counts[u - 1]) / 2; // two-bin average for the last bin
		} else {
			SmoothedHisto[u] = (counts[u - 1] + counts[u] + counts[u + 1]) / 3; // remaining bins are averaged to themselves and the immediate adjacent bins.
		}
	}
	Array.getStatistics(PixelCounts,min,max,mean,stdDev);
	Sa=(mean*nBins)-counts[0]-counts[nBins-1];
	HistogramOutFile=File.open(HistoFileName);
//	print(HistogramOutFile, "IJ Hist.values	GP values	GP values (GFactor-corrected)	Counts (Pixels)	Counts (Pixels, Normalized)	Counts (Kernel-Smoothed)	Counts (Smoothed, Normalized)");
	print(HistogramOutFile, "GP values,GP values (GFactor-corrected),Counts (Pixels),Counts (Pixels, Normalized),Counts (Kernel-Smoothed),Counts (Smoothed, Normalized)");
	
	// export the histogram bins. Ignore the absolute final bin as it's always outside the range we have (final bin #255 is for values > 1.0).
	for (m = 0; m < nBins; m++) {
		PixelCountsNormalized[m] = PixelCounts[m] / Sa; // Normalize the counts histogram; sum of all values should be 1.0
		SmoothedNormalized[m] = SmoothedHisto[m] / Sa; // Normalize the smoothed histogram; sum of all values should be 1.0
//		print(HistogramOutFile, values[m] + "	" + GPuncorrected[m] + "	" + GPcorrected[m] + "	" + PixelCounts[m] + "	" + PixelCountsNormalized[m] + "	" + SmoothedHisto[m] + "	" + SmoothedNormalized[m]);
		print(HistogramOutFile, GPuncorrected[m] + "," + GPcorrected[m] + "," + PixelCounts[m] + "," + PixelCountsNormalized[m] + "," + SmoothedHisto[m] + "," + SmoothedNormalized[m]);
	}
	
	File.close(HistogramOutFile);

}


function HSBgeneration(HSBIntensityChannel, OutfileSuffix) {

	selectWindow(HSBIntensityChannel);
	BrightChannel = "BrightnessChannel";
	run("Duplicate..."," ");
	rename(BrightChannel);
	run("Enhance Contrast", "saturated=0.35 normalize");
	run("8-bit");

	//run("Set Measurements...", "min limit display redirect=None decimal=5"); // ? not sure what this does here

	// Select and copy the channel to be used for 'hue' (the GP image)
	selectWindow(rawGPname);
	run("Duplicate..."," ");

	// This will offset the data slightly in order to distinguish NaN values from minimum (-1.00) values.
	run("Add...", "value=1.00785");
	run("Macro...", "code=[if (v != v) v = 0;]"); //convert NaNs to zero.
	setMinAndMax(0,2.00785);
	
	run(HSBLUTName);
	HueChannel = "HueChannel";
	rename(HueChannel);
	selectWindow(HueChannel);
	
	// adjust the GP image (Hue) brightness, if needed, based on the first processed image
	if (ApplySameBrightness == "Yes") {
		if (i == 0) { // first image in the list
			selectWindow(HueChannel);
			setBatchMode("show");			
			run("Brightness/Contrast...");
			waitForUser("Set fixed min & max intensity","Fixed intensity for all values: Set the minimum and maximum values for all images now.");
			getMinAndMax(GPminUserSet,GPmaxUserSet);
			setBatchMode("hide");
		}
		setMinAndMax(GPminUserSet,GPmaxUserSet);
	}
	
	getMinAndMax(GPminActual,GPmaxActual); // get the actual min/max (in case brightness was not adjusted ... should still be -1/+1)

	GPminActual = GPminActual - 1.00785;
	GPmaxActual = GPmaxActual - 1.00785;

	selectWindow(HueChannel);
	run("RGB Color");
	run("Split Channels");

	selectWindow(BrightChannel);

	imageCalculator("Multiply create 32-bit", HueChannel + " (red)", BrightChannel);
	rename("bR");

	imageCalculator("Multiply create 32-bit", HueChannel + " (green)", BrightChannel);
	rename("bG");

	imageCalculator("Multiply create 32-bit", HueChannel + " (blue)", BrightChannel);
	rename("bB");

	run("Conversions...", " "); // don't rescale
	
	selectWindow("bR");
	run("Divide...", "value=255");
	run("8-bit");

	selectWindow("bG");
	run("Divide...", "value=255");
	run("8-bit");

	selectWindow("bB");
	run("Divide...", "value=255");
	run("8-bit");

	run("Merge Channels...", "red=bR green=bG blue=bB gray=*None*");
	selectWindow("RGB");
	run("RGB Color");
	HSBname = imgName + " False Colour";
	rename(HSBname);

	if (ApplyMedianFilter == "Yes") {
		run("Median...", "radius=1");
		saveAs("png", HSB_Dir + imgName + "_HSB(medianfiltered) by " + OutfileSuffix);
	} else {
		saveAs("png", HSB_Dir + imgName + "_HSB by " + OutfileSuffix);
	}
	close();

	selectWindow(HueChannel + " (red)");
	close();
	selectWindow(HueChannel + " (green)");
	close();
	selectWindow(HueChannel + " (blue)");
	close();
	selectWindow(BrightChannel);
	close();

	run("Conversions...", "scale"); // restore the conversions to default

	// make a LUT colorbar from the first image only if all images have the same brightness range applied.
	// Otherwise save a colorbar for each image.
	if (ApplySameBrightness == "Yes") {
		if (i == 0) {
			MakeLUTbar(HSBLUTName, GPminActual, GPmaxActual, HSB_Dir + "All Images - LUT annotated");
		}
	} else {
		MakeLUTbar(HSBLUTName, GPminActual, GPmaxActual, HSB_LUTs_Dir + imgName + "_LUT annotated");
	}

}


function MakeLUTbar(CmapLUTName, CmapMin, CmapMax,SaveFileName) {

	// Make HSB LUT bar
	newImage("LUT-Hue", "8-bit Ramp", 256, 256, 1);
	run(CmapLUTName);
	run("Duplicate...", "title=LUT-Brightness");
	run("Rotate 90 Degrees Left");
	run("32-bit");
	selectWindow("LUT-Hue");
	run("RGB Color");
	run("Split Channels");
	imageCalculator("Multiply create 32-bit", "LUT-Brightness", "LUT-Hue (red)");
	rename("bR");
	run("8-bit");
	imageCalculator("Multiply create 32-bit", "LUT-Brightness", "LUT-Hue (green)");
	rename("bG");
	run("8-bit");
	imageCalculator("Multiply create 32-bit", "LUT-Brightness", "LUT-Hue (blue)");
	rename("bB");
	run("8-bit");
	run("Merge Channels...", "red=bR green=bG blue=bB gray=*None*");
	selectWindow("RGB");
	rename("HSB LUT");
	run("Rotate 90 Degrees Left");
	run("Size...", "width=32 height=256 interpolation=None");

	selectWindow("LUT-Hue (red)");
	close();
	selectWindow("LUT-Hue (green)");
	close();
	selectWindow("LUT-Hue (blue)");
	close();
	selectWindow("LUT-Brightness");
	close();

	// Annotate LUT bar with min/max values
	selectWindow("HSB LUT");
	run("Copy");
	newImage("LUT Panel", "RGB White", 70, 264, 1);
	makeRectangle(4,4,32,256);
	run("Paste");
	run("Colors...", "foreground=black background=black selection=yellow");
	run("Line Width...", "line="+2);
	run("Draw");
	run("Select None");
	setFont("Arial", 12);
	setColor(0, 0, 0);
	drawString(d2s(CmapMax,2),39,15);
	drawString(d2s(CmapMin,2),39,264);
	run("Select None");
	selectWindow("LUT Panel");
	saveAs("png", SaveFileName);
	close();

}

//function printInfo (StartTime) { //TODO: Replace this with line by line log stating options and thresholds for each image, comma or tab separated
	// intro -- start date-time, ij version, macro name, params
	// per file -- path for images and rois, threshold for gp, threshold for if, pssibly gp peak value
	// end time and elapsed time

//	FinishTime = getTime();
//	TOTALtime = (FinishTime - StartTime) / 1000;
	
//	listGP = getFileList(GP_images_Dir);

	
	
//	print("------ Input Images ------");
//	print("Ordered channel: " + chOrdered);
//	print("Disordered channel: " + chDisordered);
//	if (ch_IF != 0) {
//		print("Immunofluoresence channel: " + ch_IF); 
//	} else { 
//		print("Immunofluoresence channel: Not present"); 
//	};
//	print("\n");
//	
//	print("------ Output GP Images ------");
//	print("GP images were calculated using input image bit depth: " + UseNativeBitDepth);
//	print("GP images' lookup table: " + GPLUTname);
//	print("G factor: " + GFactor + " was applied to " + GFactorAppliedTo + ".");
//	print("\n");
	
//	print("------ Output GP-masked GP Images ------");
//	print("GP mask threshold method: " + ThresholdType);
//	if (ThresholdType=="Normal") {
//		if (ThreshForAll) { // TODO: Fix undefined variable if settings = normal, no tweaking
//			print("GP threshold set individually for each image");
//		}
//		else {
//			print("GP-mask threshold value (lower limit, 32 bit): " + GPmaskThreshold);
//		}
//	}
//	print("\n");
//	
//	if (ch_IF != 0) { 
//		print("------ Output IF-masked GP Images ------");
//		print("IF-mask threshold method: " + ThresholdType);
//		
//		if (ThresholdType=="Normal") {
//			if (ThreshForAll) {
//				print("IF threshold set individually for each image");
//			}
//			else {
//				print("IF-mask threshold value (lower limit): "+ IFmaskThreshold);
//			}
//		}
//		print("\n");
//	}
//	
//	if (MakeHSBimages=="Yes") {
//		print("------ Output HSB GP Images ------");
//		print("Intensity from: " + HSBrightChannel);
//		if (ApplySameBrightness=="Yes") {
//			print("Forced consistent GP intensity range: " + GPminUserSet + " (min) to " + GPmaxUserSet + " (max)");	
//		}
//		print("HSB images' lookup table: " + HSBLUTName);
//	print("\n");
//	}
//	print("Main results folder is: ");
//	print(" " + results_Dir);
//	print("\n");
//	print("----------------------------------");
//	print("Execution time: " + d2s(TOTALtime,2) + " seconds.");
//	print("-------------- EoF ---------------");
//
//	selectWindow("Log");
//	saveAs("Text", results_Dir + "ProcessingLog_ "+year+months+dayOfMonths+"("+hours+"h"+minutes+")");
//	setBatchMode("exit and display");

//}


// This shows only those files with TargetExtn found within InputFolder.
// To show only the subfolders use TargetExtn = "/"
function ListFiles(InputFolder, TargetExtn) {

	AllFilesAndFolders = getFileList(InputFolder);
	TargetFiles = newArray();
	for (i = 0; i < AllFilesAndFolders.length; i++) {
		if (endsWith(AllFilesAndFolders[i], TargetExtn)) {
			TargetFiles = Array.concat(TargetFiles, AllFilesAndFolders[i]);
		}
	}
	return TargetFiles;

}

// Returns a list of the available LUTs from the 'luts' folder as well as the built-in ones
function getLUTlist() {
	userLUTdir = getDirectory("luts");
	userLUTlist = ListFiles(userLUTdir, ".lut");
	for (q = 0; q < userLUTlist.length; q++) {
 		userLUTlist[q] =replace(userLUTlist[q], ".lut", "");
	}
	IJ_default_LUTlist = newArray("Fire", "Grays", "Ice", "Spectrum", "3-3-2 RGB", "Red", "Green", "Blue", "Cyan", "Magenta", "Yellow", "Red/Green");
	LUTlist = Array.concat(IJ_default_LUTlist, userLUTlist);
	return LUTlist;
}
